PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = auditoryoddball
  keyboardBackend = ioHub
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Routines
  Routine trial
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    EmotivRecordingComponent cortex_rec plugin="psychopy-emotiv"
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Listen to the tones and count the high tones
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stimuli
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        random.seed(1234)
      Begin Routine:
        r = random.random()
        if r<0.2:
            tone = "B"
            value = 2
        else:
            tone = "A"
            value = 1
        delay = 1.0 + random.random()
    SoundComponent sound_1
      sound [set every repeat] = $tone
      startEstim = 1
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.05
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    EmotivMarkingComponent eeg_marker plugin="psychopy-emotiv"
      durationEstim = 0.01
      emotiv_marker_label [set every repeat] = $tone
      emotiv_marker_value [set every repeat] = $value
      emotiv_stop_marker = False
      startEstim = 1
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine stimuli
  LoopTerminator trials
