PsychoPy2experiment version="2022.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Auditory_Oddball
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent Instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Keep your eyes on the  and centre of the screen and listen to the tones.

        Remember to keep still.

        There are 4 blocks, you can take a break at the end of each block.

        Press space bar to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stimulus
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if imagename == 'circle.png':
            label = 'standard'
            value = 1
        elif imagename == 'target.png':
            label = 'target'
            value = 4
        elif imagename == 'square.png':
            label = 'deviant'
            value = 3
    ImageComponent stimuli
      image [set every repeat] = $imagename
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.075
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    EmotivMarkingComponent eeg_marker
      marker_label [set every repeat] = $label
      marker_value [set every repeat] = $value
      saveStartStop = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.01
      stop_marker = False
      syncScreenRefresh = False
  Routine End
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press the space bar when you see the pink circle only

        To proceed to the next phase click 'Next'
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine init
    EmotivRecordingComponent cortex_rec_2
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
  Routine FixationCross
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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  Routine fixation
    ImageComponent fixationcross
      image = fixation.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    EmotivMarkingComponent eeg_marker_2
      durationEstim = 0.01
      marker_label = fixation
      marker_value = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.01
      stop_marker = False
      syncScreenRefresh = False
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Flow
  Routine init
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'target.png', 'label': 'standard', 'value': 4},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'square.png', 'label': 'deviant', 'value': 3},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'square.png', 'label': 'deviant', 'value': 3},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'target.png', 'label': 'standard', 'value': 4},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'target.png', 'label': 'standard', 'value': 4},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'circle.png', 'label': 'standard', 'value': 1},
      {'imagename': 'square.png', 'label': 'deviant', 'value': 3}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
    Routine Stimulus
  LoopTerminator trials
