PsychoPy2experiment version="2022.1.1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = auditory oddball
  keyboardBackend = ioHub
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Routines
  Routine trial
    EmotivRecordingComponent cortex_rec
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be presented with a series of tones.
        Please count the number of high tones.
        Click  <space> to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stimulus
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        random.seed(1234)
      Begin Routine:
        r=random.random()

        if r<0.2:
            tone = "B"
            value = 2
        else:
            tone = "A"
            value = 1

        delay =1.0 + random.random()
    SoundComponent sound_1
      sound [set every repeat] = A
      startEstim = 1
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.05
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    EmotivMarkingComponent eeg_marker_2
      durationEstim = 0.01
      marker_label [set every repeat] = $tone
      marker_value [set every repeat] = $value
      startEstim = 1
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.5
      stop_marker = False
      syncScreenRefresh = False
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine Stimulus
  LoopTerminator trials
