PsychoPy2experiment version="2022.1.1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tone
  keyboardBackend = ioHub
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Routines
  Routine initialize
    EmotivRecordingComponent cortex_rec
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
  Routine stimuli
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        startt = 4 + random()
    SoundComponent sound_1
      sound [set every repeat] = A
      startVal [time (s)] = startt
      stopVal [duration (s)] = 0.05
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    EmotivMarkingComponent eeg_marker
      durationEstim = 0.01
      marker_label [set every repeat] = standard
      marker_value [set every repeat] = 1
      startVal [time (s)] = startt
      stopVal [duration (s)] = 0.01
      stop_marker = False
      syncScreenRefresh = False
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Flow
  Routine initialize
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 150
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    Routine stimuli
  LoopTerminator trials
